# Generated by Configurator on Tue Jan 06 17:19:48 CET 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,E-710,PI_GCS_2,E-710
Device,PIZStage,PI_GCS_2,PIZStage
Device,PIXYStage,PI_GCS_2,PIXYStage
Device,Hamamatsu,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices
Property,E-710,DLL Name,E7XX_GCS_DLL.dll
Property,E-710,Interface Parameter,3;57600
Property,E-710,Interface Type,RS-232
Property,PIZStage,Axis,3
Property,PIZStage,Controller Name,E-710
Property,PIZStage,Invert travel range,0
Property,PIZStage,Limit_um,200.0000
Property,PIZStage,Stage,DEFAULT_STAGE
Property,PIXYStage,Axis X: HomingMode,
Property,PIXYStage,Axis X: Name,1
Property,PIXYStage,Axis X: Stage,DEFAULT_STAGE
Property,PIXYStage,Axis Y: HomingMode,
Property,PIXYStage,Axis Y: Name,2
Property,PIXYStage,Axis Y: Stage,DEFAULT_STAGE
Property,PIXYStage,Controller Name,E-710
Property,PIXYStage,Controller Name for Y axis,

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Hamamatsu
Property,Core,Focus,PIZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

