# Generated by Configurator on Tue Jan 06 19:04:11 CET 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,E-710,PI_GCS_2,E-710
Device,PIZStage,PI_GCS_2,PIZStage
Device,PIXYStage,PI_GCS_2,PIXYStage
Device,Hamamatsu,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices
Property,E-710,DLL Name,E7XX_GCS_DLL.dll
Property,E-710,Interface Parameter,3;57600
Property,E-710,Interface Type,RS-232
Property,PIZStage,Axis,3
Property,PIZStage,Controller Name,E-710
Property,PIZStage,Invert travel range,0
Property,PIZStage,Limit_um,200.0000
Property,PIZStage,Stage,DEFAULT_STAGE
Property,PIXYStage,Axis X: HomingMode,
Property,PIXYStage,Axis X: Name,1
Property,PIXYStage,Axis X: Stage,DEFAULT_STAGE
Property,PIXYStage,Axis Y: HomingMode,
Property,PIXYStage,Axis Y: Name,2
Property,PIXYStage,Axis Y: Stage,DEFAULT_STAGE
Property,PIXYStage,Controller Name,E-710
Property,PIXYStage,Controller Name for Y axis,

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Hamamatsu
Property,Core,Focus,PIZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: twophoton
# Preset: twophoton
ConfigGroup,twophoton,twophoton,PIZStage,Position,106.9915
ConfigGroup,twophoton,twophoton,Hamamatsu,Exposure,1.0037
ConfigGroup,twophoton,twophoton,Core,AutoShutter,1
ConfigGroup,twophoton,twophoton,Core,XYStage,PIXYStage

# Preset: test
ConfigGroup,twophoton,test,PIZStage,Position,100.0012
ConfigGroup,twophoton,test,Hamamatsu,Exposure,1.0037
ConfigGroup,twophoton,test,Core,AutoShutter,1
ConfigGroup,twophoton,test,Core,XYStage,PIXYStage



# PixelSize settings
# Resolution preset: 40nm
ConfigPixelSize,40nm,PIZStage,HOMING,0
PixelSize_um,40nm,0.4
ConfigPixelSize,40nm,PIZStage,Position,106.9929
PixelSize_um,40nm,0.4
ConfigPixelSize,40nm,PIZStage,Velocity,20.0004
PixelSize_um,40nm,0.4
ConfigPixelSize,40nm,PIXYStage,Axis X: Velocity,20.0005
PixelSize_um,40nm,0.4
ConfigPixelSize,40nm,PIXYStage,Axis Y: Velocity,20.0007
PixelSize_um,40nm,0.4
ConfigPixelSize,40nm,PIXYStage,TransposeMirrorX,0
PixelSize_um,40nm,0.4
ConfigPixelSize,40nm,PIXYStage,TransposeMirrorY,0
PixelSize_um,40nm,0.4


